WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(SessionSettingsPath(Category=SessionSettings), RuleSettingsPath(Category=SessionSettings))
-> GroupWorkflow InitializeSettings
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,System.String)> TransitionLookup
    BehaviorSubject<RuleSchema.DelphiRule> RuleSettings
    BehaviorSubject<System.Reactive.Unit> ExitTrigger

    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSessionSettings(Path=DelphiSession.yml)
    -> Take(Count=1) => #5
    -> AsyncSubject SessionSettings
    #5 -> Timestamp
    -> AsyncSubject StartTime
    -> MemberSelector(Selector=Timestamp.UtcDateTime)
    -> Aeon.Acquisition.FormatDate
    -> AsyncSubject SessionTimestamp

    ExternalizedMapping(Path(DisplayName=RuleSettingsPath))
    -> RuleSelector(Path=rule1.rule.yml)
    -> MulticastSubject RuleSettings

    SubscribeSubject RuleSettings
    -> SelectMany GenerateTransitionDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=4)
        -> ToDictionary(KeySelector=Name, ElementSelector=TransitionsTo)
        -> WorkflowOutput
    -> MulticastSubject TransitionLookup

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap)
    -> Merge => #20
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap.Count)
    -> PropertyMapping(Count) => #23
    #20, #23 -> Take(Count=8)
    -> ToDictionary(KeySelector=Name, ElementSelector=Line)
    -> AsyncSubject LineMappings

ExternalizedMapping(StartStateMachineKey(Category=ControlKeys))
-> GroupWorkflow Devices
    GroupWorkflow DelphiController
        Unit
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        Unit
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> DelaySubscription(DueTime=PT1S) => #4
        #1, #4 -> Concat
        -> BehaviorSubject Commands

        SubscribeSubject Commands => #7
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=HarpProperties.ComPort)
        -> PropertyMapping(PortName) => #10
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=HarpProperties.ShowHarpLeds)
        -> BooleanToLedState
        -> PropertyMapping(VisualIndicators) => #14
        #7, #10, #14 -> Harp.OutputExpander.Device(OperationMode=Standby, OperationLed=On, DumpRegisters=false, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM13)
        -> PublishSubject Events

        BehaviorSubject<DataSchema.LineCommand> LineCommands
        -> Condition CommandExists => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=LineName) => #1
            SubscribeSubject LineMappings => #2
            #1, #2 -> WithLatestFrom
            -> ContainsKey
            -> WorkflowOutput
        -> SelectMany LineActivation
            WorkflowInput Source1
            -> AsyncSubject Command

            SubscribeSubject LineMappings => #2
            SubscribeSubject Command => #3
            #2, #3 -> WithLatestFrom => #4
            -> MemberSelector(Selector=Item1) => #5
            #4 -> MemberSelector(Selector=Item2.LineName)
            -> PropertyMapping(Value) => #7
            #5, #7 -> Index(Operand=StringProperty(Value=OdorC))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
              Expression: Math.Pow(2, it)
            #4 -> MemberSelector(Selector=Item2) => #10
            #9, #10 -> Zip => #11
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out8)) => #14
            #11 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out9)) => #17
            #14, #17 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput
        #18 -> Condition OpenCommand
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> WorkflowOutput
        -> BehaviorSubject LineOnsets

        BehaviorSubject<System.Boolean> CurrentPokeState

        SubscribeSubject Events
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.AuxInState) => #24
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=LineMappings.AuxLine)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(Math.Pow(2, it))
        -> PropertyMapping(Value) => #28
        #24, #28 -> HasFlag(Operand=WorkflowProperty<Harp.OutputExpander.AuxiliaryInputs>(Value=Aux0)) => #29
        -> Condition PokeOnset
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject PokeOnset
        -> BooleanProperty(Value=true)
        -> MulticastSubject CurrentPokeState
        #29 -> Condition PokeOffset
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject PokeOffset
        -> BooleanProperty(Value=false)
        -> MulticastSubject CurrentPokeState

        BehaviorSubject<System.Reactive.Unit> CloseAllLines
        -> SelectMany CloseAllLines
            WorkflowInput Source1

            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Keys)
            -> Merge => #3
            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=8)
            -> SelectMany CloseCommand
                WorkflowInput Source1
                -> PropertyMapping(LineName)
                -> DataSchema.LineCommand(LineName=OdorD, State=false)
                -> MulticastSubject LineCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> PortValveCommand
        -> SelectMany PortValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.PortLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out0)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out0)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> StimulusDelivered

        BehaviorSubject<System.Boolean> VacuumValveCommand
        -> SelectMany VacuumValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.VacuumLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out2)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out2)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

    ExternalizedMapping(StartStateMachineKey)
    -> GroupWorkflow StateController
        BehaviorSubject<System.String> CurrentState

        ExternalizedMapping(Filter(DisplayName=StartStateMachineKey))
        -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false)
        -> StringProperty(Value=DefaultState)
        -> MulticastSubject BeginState
        -> Take(Count=1)

        BehaviorSubject<System.String> BeginState
        -> SelectMany SelectState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StateName
            -> MulticastSubject CurrentState

            SubscribeSubject SubjectDictionary => #4
            SubscribeSubject StateName
            -> PropertyMapping(Value) => #6
            #4, #6 -> Index(Operand=StringProperty(Value=OdorC))
            -> Merge
            -> Take(Count=1)
            -> AsyncSubject StateComplete

            SubscribeSubject StateName => #11
            SubscribeSubject TransitionLookup => #12
            SubscribeSubject StateComplete => #13
            #12, #13 -> SubscribeWhen => #14
            SubscribeSubject StateName
            -> PropertyMapping(Key) => #16
            #14, #16 -> TryGetValueOrDefault(Key=OdorC, DefaultString=DefaultState) => #17
            #11, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as CurrentState, it.Item2 as TransitionState)
            -> Take(Count=1)
            -> WorkflowOutput
        -> MemberSelector(Selector=TransitionState)
        -> MulticastSubject BeginState

        GroupWorkflow StateDefinitions
            GroupWorkflow OdorState
                ExternalizedMapping(LineName)
                -> CreateObservable OdorState => #1
                    Unit
                    -> SelectMany ClosePortValve => #1
                        WorkflowInput Source1
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject PortValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Condition VacuumOn => #2
                        SubscribeSubject SessionSettings => #0
                        WorkflowInput Source1 => #1
                        #0, #1 -> SubscribeWhen
                        -> MemberSelector(Selector=Metadata.UseVacuum)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.SwitchTime1)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #6
                    #2, #6 -> Delay(DueTime=PT0.01S)
                    -> SelectMany CloseAllLines => #8
                        WorkflowInput Source1
                        -> Unit
                        -> MulticastSubject CloseAllLines
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.SwitchTime2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #12
                    #8, #12 -> Delay(DueTime=PT0.02S)
                    -> SelectMany StartVacuum => #14
                        WorkflowInput Source1
                        -> SelectMany OpenVacuum
                            WorkflowInput Source1
                            -> BooleanProperty(Value=true)
                            -> MulticastSubject VacuumValveCommand
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.VacuumDelay)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #18
                    #14, #18 -> Delay(DueTime=PT0.025S)
                    -> SelectMany CyclePortValve => #20
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject PortValveCommand => #2
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.PortValveCycleTime)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #6
                        #2, #6 -> Delay(DueTime=PT0.025S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject PortValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    ExternalizedMapping(LineName) => #21
                    #20, #21 -> SelectMany OpenActiveLine => #22
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(LineName) => #1
                        #0, #1 -> SelectMany LineCommand
                            WorkflowInput Source1

                            ExternalizedMapping(LineName)
                            -> DataSchema.LineCommand(LineName=OdorA, State=true)
                            -> MulticastSubject LineCommands
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.VacuumDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #26
                    #22, #26 -> Delay(DueTime=PT0.07S)
                    -> SelectMany StopVacuum => #28
                        WorkflowInput Source1
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject VacuumValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.ChargeTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #32
                    #28, #32 -> Delay(DueTime=PT0.2S) => #33
                    #1 -> Condition VacuumOff => #34
                        SubscribeSubject SessionSettings => #0
                        WorkflowInput Source1 => #1
                        #0, #1 -> SubscribeWhen
                        -> MemberSelector(Selector=Metadata.UseVacuum)
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.SwitchTime1)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #38
                    #34, #38 -> Delay(DueTime=PT0.01S)
                    -> SelectMany CloseAllLines => #40
                        WorkflowInput Source1
                        -> Unit
                        -> MulticastSubject CloseAllLines
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.SwitchTime2)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #44
                    #40, #44 -> Delay(DueTime=PT0.01S) => #45
                    #45, #21 -> SelectMany OpenActiveLine => #46
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(LineName) => #1
                        #0, #1 -> SelectMany LineCommand
                            WorkflowInput Source1

                            ExternalizedMapping(LineName)
                            -> DataSchema.LineCommand(LineName=OdorA, State=true)
                            -> MulticastSubject LineCommands
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.ChargeTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #50
                    #46, #50 -> Delay(DueTime=PT0.2S)
                    -> BooleanProperty(Value=true) => #52
                    #33, #52 -> Merge
                    -> SelectMany SustainedPoke
                        WorkflowInput Source1

                        SubscribeSubject PokeOnset => #1
                        SubscribeSubject RoiThreshold => #2
                        #1, #2 -> WithLatestFrom
                        -> Condition RoiTriggered => #4
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> WorkflowOutput
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.MinimumPokeTime)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #8
                        #4, #8 -> Delay(DueTime=PT0.01S) => #9
                        SubscribeSubject PokeOffset => #10
                        #9, #10 -> TakeUntil
                        -> Repeat
                        -> WorkflowOutput
                    -> SelectMany OpenPortValve => #55
                        WorkflowInput Source1
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject PortValveCommand
                        -> MulticastSubject StimulusDelivered
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MinOdorDelivery)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #59
                    #55, #59 -> Delay(DueTime=PT0.1S)
                    -> SelectMany WaitForRelease
                        WorkflowInput Source1

                        SubscribeSubject PokeOffset => #1
                        SubscribeSubject CurrentPokeState
                        -> Condition AlreadyReleased => #3
                            WorkflowInput Source1
                            -> BitwiseNot
                            -> WorkflowOutput
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.MaxOdorDelivery)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT8S, Period=PT0S)
                        -> BooleanProperty(Value=true) => #9
                        #1, #3, #9 -> Merge
                        -> BooleanProperty(Value=true)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=StateName))
                -> StringProperty(Value=OdorA) => #3
                #1, #3 -> Zip
                -> WorkflowOutput
            -> Take(Count=1) => #1
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorB, StateName=OdorB)
            -> Take(Count=1) => #3
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorC, StateName=OdorC)
            -> Take(Count=1) => #5
            IncludeWorkflow(Path=Extensions\DefaultState.bonsai, StateName=DefaultState)
            -> Take(Count=1) => #7
            #1, #3, #5, #7 -> Merge
            -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
            -> AsyncSubject SubjectDictionary
            -> WorkflowOutput

    GroupWorkflow CameraController
        BehaviorSubject<System.Boolean> CameraStreamEnabled

        BooleanProperty(Value=false)
        -> MulticastSubject CameraStreamEnabled

        BehaviorSubject<DataSchema.CameraCommand> CameraCommands => #3
        -> Condition Stop
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> BitwiseNot
            -> WorkflowOutput
        -> GroupWorkflow StopStream
            WorkflowInput Source1
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStopPayload(PwmStop=Pwm0))
            -> MulticastSubject Commands => #2
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.CameraTriggerLine)
            -> PropertyMapping(PwmAndStimDisable) => #5
            #2, #5 -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimDisablePayload(PwmAndStimDisable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=false)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput
        #3 -> Condition Start
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> WorkflowOutput
        -> GroupWorkflow StartStream
            WorkflowInput Source1 => #0
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=CameraProperties.ImagingRate)
            -> PropertyMapping(Frequency) => #3
            #0, #3 -> Harp.OutputExpander.ConfigurePwm(PwmChannels=Pwm0, Frequency=60, DutyCycle=10, PulseCount=0, TriggerSource=Software, EventConfig=Enabled)
            -> MulticastSubject Commands => #5
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.CameraTriggerLine)
            -> PropertyMapping(PwmAndStimEnable) => #8
            #5, #8 -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimEnablePayload(PwmAndStimEnable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStartPayload(PwmStart=Pwm0))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=true)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput

        SubscribeSubject Events
        -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.PwmRiseEvent)
        -> PublishSubject PwmRise

        SubscribeSubject Events
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedPwmRiseEvent) => #12
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.ExposureTime)
        -> PropertyMapping(ExposureTime) => #15
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.SerialNumber)
        -> PropertyMapping(SerialNumber) => #18
        #12, #15, #18 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23604583, ColorProcessing=Default, ExposureTime=10000, Gain=0, Binning=1)
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow PwmRise(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject VideoFeed

        SubscribeSubject VideoFeed
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.Threshold(ThresholdValue=59, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=485, Y=722), Point(X=647, Y=722), Point(X=647, Y=961), Point(X=485, Y=961))), Operation=Sum)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Activity.Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=1500000))
        -> BehaviorSubject RoiThreshold

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data, ChunkSize=1)

    SubscribeSubject Events
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Expander, Heartbeats=Events, ClosingDuration=nil)

    SubscribeSubject StartTime
    -> CreateObservable LogLocalTimestamp
        WorkflowInput Source1
        -> AsyncSubject Data

        SubscribeSubject Data
        -> MemberSelector(Selector=Timestamp.LocalDateTime)
        -> Take(Count=1)
        -> Aeon.Acquisition.FormatDate => #5
        SubscribeSubject Data
        -> MemberSelector(Selector=Timestamp.UtcDateTime)
        -> IncludeWorkflow LocalTime(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
        -> PropertyMapping(FileName) => #9
        #5, #9 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data\2024-06-03T12-32-51\LocalTime\LocalTime_2024-06-03T12-32-51.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
        -> WorkflowOutput
    -> Merge

    SubscribeSubject SessionSettings => #9
    SubscribeSubject Events => #10
    #9, #10 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject RuleSettings => #15
    SubscribeSubject Events => #16
    #15, #16 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats=Events, ClosingDuration=nil, LogName=RuleSettings)

    BooleanProperty(Value=false)
    -> BehaviorSubject PokeActivity

    SubscribeSubject PokeOnset
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeActivity => #24
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PostEventTime) => #26
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PreEventTime)
    -> PropertyMapping(Value) => #29
    #26, #29 -> Add(Operand=DoubleProperty(Value=2.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #32
    #24, #32 -> Throttle(DueTime=PT5S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject PokeActivity

    SubscribeSubject VideoFeed => #36
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PreEventTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #40
    #36, #40 -> Delay(DueTime=PT2.5S) => #41
    SubscribeSubject PokeActivity => #42
    #41, #42 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1) => #45
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.ImagingRate)
    -> PropertyMapping(FrameRate) => #48
    #45, #48 -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=Events, ClosingDuration=nil, LogName=VideoData, FrameRate=60) => #49
    SubscribeSubject ExitTrigger => #50
    #49, #50 -> TakeUntil

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RobocopyTimeInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT1H)
    -> Unit
    -> MulticastSubject StartRobocopy

    BehaviorSubject<System.Reactive.Unit> StartRobocopy
    -> SelectMany Robocopy
        WorkflowInput Source1

        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.LoggingRootPath) => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RemoteTransferRootPath) => #4
        #2, #4 -> Zip
        -> Format(Format="python\robocopy.py {0} {1}", Selector="Item1,Item2")
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess
          FileName=..\.python\.venv\Scripts\python.exe
          Arguments="python\robocopy.py C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data C:\Users\neurogears\source\repos\zuckerman\Delphi\temp_data_remote"
        -> Take(Count=1)
        -> WorkflowOutput

IncludeWorkflow => #5
  Path=Extensions\DelphiVisualizer.bonsai
  EventsInSubject=Events
  SessionSettingsSubject=SessionSettings
  RuleSettingsSubject=RuleSettings
  CurrentStateSubject=CurrentState
  PokeOnsetSubject=PokeOnset
  StimOnsetSubject=StimulusDelivered
  EventsOutSubject=Commands
-> VisualizerMapping(VisualizerType=TypeMapping<Extensions.Extensions.DeviceVisualizer>) => #6
SubscribeSubject VideoFeed
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #9
#6, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
#5 -> GroupWorkflow ExitTrigger
    WorkflowInput Source1
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=88))
    -> Unit
    -> MulticastSubject ExitTrigger
    -> Delay(DueTime=PT0.5S)
    -> MulticastSubject StartRobocopy
    -> MulticastSubject CloseAllLines
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(StopCameraStream, CloseAllLinesKey, OpenPortValveKey, ClosePortValveKey, PokeOnKey, PokeOffKey, StartCameraStream)
-> GroupWorkflow ControlKeys
    ExternalizedMapping(Filter(DisplayName=StartCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> Unit
    -> SelectMany StartCameraStream => #3
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=true)
        -> WorkflowOutput
    ExternalizedMapping(Filter(DisplayName=StopCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Alt", SuppressRepetitions=false)
    -> SelectMany StopCameraStream => #6
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=false)
        -> WorkflowOutput
    #3, #6 -> Merge
    -> MulticastSubject CameraCommands

    ExternalizedMapping(Filter(DisplayName=CloseAllLinesKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Alt", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject CloseAllLines

    ExternalizedMapping(Filter(DisplayName=OpenPortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #15
    ExternalizedMapping(Filter(DisplayName=ClosePortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #18
    #15, #18 -> Merge
    -> MulticastSubject PortValveCommand

    ExternalizedMapping(Filter(DisplayName=PokeOnKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift", SuppressRepetitions=true)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOnset

    ExternalizedMapping(Filter(DisplayName=PokeOffKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyUp(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift")
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOffset

Timer(DueTime=PT0S, Period=PT1S)
-> Aeon.Acquisition.AvailableMemory
